PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = WythoffsHumanExp
  keyboardBackend = ioHub
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Routines
  Routine make_move
    CodeComponent move_code
      Code Type = Auto->JS
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      Each Frame:
        for square in squares:
            square.draw()
      End Routine:
        if row_new == col_new == 0:
            trials.finished = True
    PolygonComponent moving_piece
      fillColor = black
      lineColor = black
      pos [set every frame] = ((((1-t)*col+t*col_new)-6.5)/16, (14-((1-t)*row+t*row_new)-7.5)/16)
      shape = circle
      size = (1/18, 1/18)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine select_move
    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        # board starting spot initialization

        row = 13
        col = 13
        row_new = 13
        col_new = 13
      Begin Experiment:
        # Make game board tiles for rendering later

        squares = []

        for row in range(14):
            for col in range(14):

                if (row + col) % 2 == 0:
                    color = 'lightgray'
                else:
                    color = 'darkgray'

                x_loc = ((14 - row) - 7.5) / 16
                y_loc = (col - 6.5) / 16

                squares.append(
                    visual.Rect(
                        win = win,
                        width = 1/16,
                        height = 1/16,
                        pos = (x_loc, y_loc),
                        fillColor = color))
      Begin Routine:
        row = row_new
        col = col_new
      Each Frame:
        if mouse.getPressed()[0] == 1:
            mouse_x, mouse_y = mouse.getPos()
            row_new = round(0 - ((mouse_y * 16) + 7.5 - 14))
            col_new = round((mouse_x * 16) + 6.5)
            if row_new <= row and col_new <= col:
                if row_new >= 0 and col_new >= 0:
                    if row_new==row or col_new==col or row-row_new == col-col_new:
                        continueRoutine = False

        for square in squares:
            square.draw()
    PolygonComponent piece
      fillColor = black
      lineColor = black
      pos [set every repeat] = ((col-6.5)/16, (14-row-7.5)/16)
      shape = circle
      size = (1/18, 1/18)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine npc_move
    CodeComponent npc_code
      Code Type = Auto->JS
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      Each Frame:
        for square in squares:
            square.draw()
      End Routine:
        if row_new == col_new == 0:
            trials.finished = True
    PolygonComponent moving_npc
      fillColor = gray
      lineColor = gray
      pos [set every frame] = ((((1-t)*col+t*col_new)-6.5)/16, (14-((1-t)*row+t*row_new)-7.5)/16)
      shape = circle
      size = (1/18, 1/18)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine npc_wait
    CodeComponent wait_code
      Code Type = Auto->JS
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      Begin Routine:
        row = row_new
        col = col_new

        # select random opponent move
        moves = []

        for r in range (row): # vertical moves
            moves.append((r, col))

        for c in range (col): # horiz moves
            moves.append((row, c))

        for d in range(1, min(row, col) + 1): # diag moves
            moves.append((row - d, col - d))

        import random

        (row_new, col_new) = random.choice(moves)
      Each Frame:
        for square in squares:
            square.draw()
    PolygonComponent npc
      fillColor = gray
      lineColor = gray
      pos [set every repeat] = ((col-6.5)/16, (14-row-7.5)/16)
      shape = circle
      size = (1/18, 1/18)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 13
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    Routine select_move
    Routine make_move
    Routine npc_wait
    Routine npc_move
  LoopTerminator trials
